PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Exp_instruction
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    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the following task, a fixation point will appear at the center of the screen. After the fixation point disappears, a picture will be shown. This picture may be generated by AI technology or it may be a real photographed image. First, please make a judgment. If you think it is generated by AI(fake), press the F key. If you think it is a real picture(real), please press the J key. After making the judgment, please rate your confidence in your judgment. From 1 to 4, 1 indicates very low confidence and 4 indicates very high confidence. Press any key to start.
    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Exp_process
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    TextComponent F_key
      letterHeight = 0.05
      pos = (-0.5, 0.4)
      startVal [time (s)] = 0.0
      text = F: Fake
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    TextComponent J_key
      letterHeight = 0.05
      pos = (0.5, 0.4)
      startVal [time (s)] = 0.0
      text = Real : J
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    ImageComponent image
      image [set every repeat] = $images
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent F_key_resp
      allowedKeys [set every repeat] = 'f'
      correctAns = $judge
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    KeyboardComponent J_key_resp
      allowedKeys = 'j'
      correctAns = $judge
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent quit
      Code Type = Auto->JS
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      End Experiment:
        keys = event.waitKeys(keyList=['escape'])
        if 'escape' in keys:
            core.quit()
  Routine Exp_end
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for participating in this experiment.
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    KeyboardComponent key_resp_2
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Exp_point
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine Exp_conf
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    TextComponent conf
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please rate your confidence in the correctness of the judgment you just made.
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    KeyboardComponent rating
      allowedKeys = '1','2','3','4','5'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine Exp_instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'images': 'fake\\fake (1).jpg', 'judge': 'F'},
      {'images': 'fake\\fake (2).jpg', 'judge': 'F'},
      {'images': 'fake\\fake (3).jpg', 'judge': 'F'},
      {'images': 'fake\\fake (4).jpg', 'judge': 'F'},
      {'images': 'fake\\fake (5).jpg', 'judge': 'F'},
      {'images': 'real\\real (1).jpg', 'judge': 'J'},
      {'images': 'real\\real (2).jpg', 'judge': 'J'},
      {'images': 'real\\real (3).jpg', 'judge': 'J'},
      {'images': 'real\\real (4).jpg', 'judge': 'J'},
      {'images': 'real\\real (5).jpg', 'judge': 'J'}]
    Routine Exp_point
    Routine Exp_process
    Routine Exp_conf
  LoopTerminator trials
  Routine Exp_end
